PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s' % (expInfo['participant'], expInfo['participant'], expName)
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = timing_test
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  runMode = 1
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Routines
  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 101 (task ID for 3min EC + 3min EO resting state task)
        task_ID_code = 99
        print("Starting experiment: < Timing Test Task >. Task ID:", task_ID_code)

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        # White light sensor plugged into 2nd spot produces trigger code 4
        x_start_code = 8
        o_start_code = 16
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name in ['Cedrus C-POD', 'Cedrus StimTracker Quad'], "Incorrect XID device detected."
            if dev.device_name == 'Cedrus C-POD':
                pod_name = 'C-POD'
            else:
                pod_name = 'M-POD'
            dev.set_pulse_duration(2)  # set pulse duration to 2ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...\n")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print(f"{pod_name}<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.\n")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C/M-POD connected for this session! "
                  "You must start/stop EEG recording manually!\n")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
  Routine trial
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    TextComponent text_x
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = x
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    TextComponent text_o
      letterHeight = 0.3
      startEstim = 0.5
      startVal [condition] = text_x.status == FINISHED
      stopVal [duration (s)] = 1.0
      text = o
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    CodeComponent trigger
      Code Type = Py
      Begin Routine:
        x_pulse_started = False
        o_pulse_started = False
      Each Frame:
        if text_x.status == STARTED and not x_pulse_started:
            win.callOnFlip(dev.activate_line, bitmask=x_start_code)
            x_pulse_started = True

        if text_o.status == STARTED and not o_pulse_started:
            win.callOnFlip(dev.activate_line, bitmask=o_start_code)
            o_pulse_started = True
  Routine __end__
    RoutineSettingsComponent __end__
      saveStartStop = False
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    TextComponent text_thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
      units = norm
      wrapWidth = 1.8
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  Routine block_start
    RoutineSettingsComponent block_start
      saveStartStop = False
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    TextComponent block_start_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Beginning timing test trials...
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    CodeComponent block_start_trigger
      Code Type = Py
      Begin Routine:
        dev.activate_line(bitmask=block_start_code)
        # no need to wait 500ms as this routine lasts 2s
  Routine block_end
    RoutineSettingsComponent block_end
      saveStartStop = False
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    TextComponent block_end_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Completed timing test trials.
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    CodeComponent block_end_trigger
      Code Type = Py
      Begin Routine:
        dev.activate_line(bitmask=block_end_code)
        # no need to wait 500ms as this routine lasts 2s
  Routine x_disp
    RoutineSettingsComponent x_disp
      saveStartStop = False
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    TextComponent text_x_2
      letterHeight = 0.3
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = x
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    KeyboardComponent stop_text_x
      allowedKeys = '1', '2', '3', '4', '5', '6'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine o_disp
    RoutineSettingsComponent o_disp
      saveStartStop = False
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    TextComponent text_o_2
      letterHeight = 0.3
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = o
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    KeyboardComponent stop_text_o
      allowedKeys = '1', '2', '3', '4', '5', '6'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine __start__
  Routine x_disp
  Routine o_disp
  Routine block_start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine trial
  LoopTerminator trials
  Routine block_end
  Routine __end__
